PsychoPy2experiment version="2020.1.3"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {'gender (m/f)': 'm', 'age': '27', 'participant': 'Chandan'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1680, 1050]
  expName = NewReactionTimeExperiment_Peripheral
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Routines
  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.3
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
  Routine ReflexTestInstuctions
    TextComponent Instruction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This experiment will test your reflexes.

        Press Space Bar when you see a Red Square


        Press any key to continue
    KeyboardComponent Continue
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ReflexTest
    PolygonComponent redCircle
      fillColor [set every repeat] = $[1,0,0]
      lineColor = $[1,0,0]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = delay
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = delay
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        random.seed()
      Begin Routine:
        delay=random.randint(500,1500)/1000
    VariableComponent delayVar
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = delay
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  Routine routine_2ColorTest
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import numpy as np
        random.seed()
      Begin Routine:
        delay2=random.randint(1000,1500)/1000
        colorCase=random.randint(0,1)

        angles=np.linspace(-30,30,7)

        randInd=random.randint(0,6)

        xpos=angles[randInd]
        thisExp.addData('angle',xpos)

        if colorCase ==0:
            RLED=0
            GLED=1
            correctKey='left'

        if colorCase==1:
            RLED=1
            GLED=0
            correctKey='right'
    PolygonComponent ColorSquare
      fillColor [set every repeat] = $[RLED,GLED,0]
      lineColor [set every repeat] = $[RLED,GLED,0]
      pos [set every repeat] = $(xpos, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (5,5)
      startVal [time (s)] = delay2
      units = deg
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correctKey
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = delay2
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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    PolygonComponent Cross
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = deg
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  Routine Color_Instructions
    TextComponent colorInstruction
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the next set of experiments

        Press the Left arrow if GREEN and

        Right arrow if RED

        Press any key to continue
    KeyboardComponent ContinueColor
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Direct_Instruction
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        In the next set of experiments

        Press the Left arrow if Left

        and

        right arrow if Right

        of Vertical Line
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine DirectionTest
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        random.seed()
      Begin Routine:
        delayDirection=random.randint(1500,2000)/1000
        DirectionCase=random.randint(0,1)

        if DirectionCase ==0:
            xpos=-0.1
            correctKeyDir='left'

        if DirectionCase==1:
            xpos=0.1
            correctKeyDir='right'
    PolygonComponent Line
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      ori = 90
      shape = line
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      pos [set every repeat] = (xpos, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = delayDirection
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = correctKeyDir
      forceEndRoutine = True
      startVal [time (s)] = delayDirection
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Flow
  Routine Color_Instructions
  LoopInitiator ColorTrials loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine routine_2ColorTest
  LoopTerminator ColorTrials
  Routine thanks
